#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "lookup.hs_"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl"
#include "HSLML_STARLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SANGERCLEANUP_PROCESSES {
  variable arrHHSDevices[];
  variable arrTiltModules[];
  variable blnSimulationMode;
  sequence seqTips_NTR300;
  sequence seq_BindOnMag;
  sequence seq_Waste;
  sequence seq_Source;
  sequence seq_CORE;
  sequence seq_Destination;
  sequence seq_Beads;
  sequence seq_HHS;
  sequence seq_Elution;
  sequence seq_Bind;
  sequence seq_Ethanol;
  sequence seqTips_NTREmptyStack;
  function Abstract(  ) void ;
  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & seqToIncrement ) void ;
  function HHS_Heat( variable intTemp ) void ;
  function HHS_Lock( variable blnGripState ) void ;
  function HHS_Shake( variable intSpeed ) void ;
  function PIP_96H_DWPToDWP( device & ML_STAR, sequence seqSource, sequence & seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject, variable & blnIsTwoPlate ) void ;
  function PIP_BeadAddition(  ) void ;
  function SYSTEM_Abort( device & ML_STAR ) void ;
  function SYSTEM_Close( device & ML_STAR ) void ;
  function SYSTEM_Init( device & ML_STAR, sequence seqCORE, sequence seqNTRTips, sequence seqNTREmptyStack, sequence & seqSource, sequence & seqBind, sequence & seqDestination, sequence & seqBindOnMag, sequence seqBeads, sequence seqElution, sequence seqEthanol, sequence seqWaste, sequence seqHHS, variable blnSim, variable & blnIsTwoPlate ) void ;
  function TMR_Start( timer & strTimer, variable intTime ) void ;
  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void ;
  function TRP_DWP_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function TRP_PCR_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function Abstract(  ) void {
  }

  function HHS_Heat( variable intTemp ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Heat"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(""), arrHHSDevices);
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function HHS_Shake( variable intSpeed ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Shake"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intSpeed != 0)
        {
          HSLHamHeaterShaker::StartShaker(loopCounter1, intSpeed);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> arrHHSDevices: "), arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("-- Started shaking devHHS_"), loopCounter1, Translate(" at "), intSpeed, Translate("rpm"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopShaker(loopCounter1);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Stopped shaking HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SIM] Simulating HHS shake at: "), intSpeed, Translate(" RPM"), Translate(""));
    }
  }

  function SYSTEM_Init( device & ML_STAR, sequence seqCORE, sequence seqNTRTips, sequence seqNTREmptyStack, sequence & seqSource, sequence & seqBind, sequence & seqDestination, sequence & seqBindOnMag, sequence seqBeads, sequence seqElution, sequence seqEthanol, sequence seqWaste, sequence seqHHS, variable blnSim, variable & blnIsTwoPlate ) void {
    private variable strHHSDevice;
    private variable loopCounter1;
    private variable rtnHHS;
    private dialog customDialog_1;
    private variable intPlateNumber;
    private variable rtnValue;
    private variable intLoopNumber;
    private variable strLabwareID;
    private variable strPositionID;
    private variable loopCounter2;
    private variable index;
    blnIsTwoPlate = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Init"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = blnSim;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("="));
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("="));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    intPlateNumber = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    if (intPlateNumber == 1)
    {
      blnIsTwoPlate = 0;
    }
    else
    {
      blnIsTwoPlate = 1;
    }
    arrHHSDevices.SetSize(0);
    HSLHamHeaterShaker::SetSimulation(blnSimulationMode);
    {
      for(loopCounter1 = 0; loopCounter1 < 1;)
      {
        loopCounter1 = loopCounter1 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter1);
        rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(loopCounter1, strHHSDevice);
        arrHHSDevices.AddAsLast(strHHSDevice);
        if (rtnHHS != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising HHS module = "), arrHHSDevices.ElementAt( loopCounter1 -1));
        }
        HSLHamHeaterShaker::StopAllShaker();
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Array of HHS modules, arrHHSDevices = "), arrHHSDevices);
    intLoopNumber = 96;
    index = 1;
    strLabwareID = Translate("");
    strPositionID = Translate("");
    SeqRemoveAll(seq_CORE);
    SeqCopySequence(seq_CORE, seqCORE);
    SeqRemoveAll(seqTips_NTR300);
    SeqCopySequence(seqTips_NTR300, seqNTRTips);
    SeqRemoveAll(seqTips_NTREmptyStack);
    SeqCopySequence(seqTips_NTREmptyStack, seqNTREmptyStack);
    SeqRemoveAll(seq_Beads);
    SeqCopySequence(seq_Beads, seqBeads);
    SeqRemoveAll(seq_Elution);
    SeqCopySequence(seq_Elution, seqElution);
    SeqRemoveAll(seq_Ethanol);
    SeqCopySequence(seq_Ethanol, seqEthanol);
    SeqRemoveAll(seq_Waste);
    SeqCopySequence(seq_Waste, seqWaste);
    SeqRemoveAll(seq_HHS);
    SeqCopySequence(seq_HHS, seqHHS);
    if (intPlateNumber == 1)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(seqSource, 97);
        }
      }
      SeqResetSequenceIndexes(seqSource);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqSource);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(seqBind, 97);
        }
      }
      SeqResetSequenceIndexes(seqBind);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqBind);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(seqDestination, 97);
        }
      }
      SeqResetSequenceIndexes(seqDestination);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqDestination);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(seqBindOnMag, 97);
        }
      }
      SeqResetSequenceIndexes(seqBindOnMag);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqBindOnMag);
    }
  }

  function TMR_Start( timer & strTimer, variable intTime ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_Start"));
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument in simulation. Shortening timer."), Translate(""));
      intTime = 3;
    }
    if( 0 == strTimer.SetTimer(intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started new timer for: "), intTime, Translate(" seconds"), Translate(""));
  }

  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void {
    rtnTimerStopped = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_WaitFor"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for timer to complete..."), Translate(""));
    rtnTimerStopped = strTimer.WaitTimer(hslTrue, hslTrue);
    if (0 == rtnTimerStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Timer complete."), Translate(""));
  }

  function SYSTEM_Close( device & ML_STAR ) void {
    private dialog customDialog_2;
    private variable rtn;
    private variable loopCounter2;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Close"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    rtn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Complete Successfully #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function SYSTEM_Abort( device & ML_STAR ) void {
    private dialog customDialog_3;
    private variable rtn;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    private variable loopCounter2;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Abort"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    rtn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Method aborted"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Aborted #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function HHS_Lock( variable blnGripState ) void {
    private variable intModuleCount;
    private variable loopCounter1;
    private variable rtn;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Locking HHS..."), Translate(""));
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnGripState == 1)
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 0);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error opening HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Open;");
          }
        }
        else
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 1);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Close;");
          }
        }
      }
    }
  }

  function TRP_DWP_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intEjectTool;
    private variable loopCounter1;
    private variable intGripHeight;
    private variable intNumberOfTransports;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_DWP_CORE"));
    intEjectTool = 0;
    intGripWidth = 80;
    intGripHeight = 8.5;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    HHS_Lock(1);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    HHS_Lock(0);
  }

  function TRP_PCR_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intEjectTool;
    private variable loopCounter1;
    private variable intGripHeight;
    private variable intNumberOfTransports;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_PCR_CORE"));
    intEjectTool = 0;
    intGripWidth = 80;
    intGripHeight = 8.5;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    HHS_Lock(1);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    HHS_Lock(0);
  }

  function PIP_BeadAddition(  ) void {
  }

  function PIP_96H_DWPToDWP( device & ML_STAR, sequence seqSource, sequence & seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject, variable & blnIsTwoPlate ) void {
    private dialog customDialog_4;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private dialog customDialog_9;
    private dialog customDialog_10;
    private variable intTipType;
    private variable rtnLookup;
    private variable intTotalPositions;
    private variable loopCounter2;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private variable fltMixCycleMax;
    private dialog customDialog_11;
    private variable intMixCycleMax;
    private dialog customDialog_12;
    private dialog customDialog_13;
    private dialog customDialog_14;
    private dialog customDialog_15;
    private dialog customDialog_16;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== blnTipEject = "), blnTipEject);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    intMixCycleMax = 99;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_15.InitCustomDialog("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");
      customDialog_15.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_15.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_15.ShowCustomDialog();
      rtnValue = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_15.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_16.InitCustomDialog("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");
        customDialog_16.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_16.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_16.ShowCustomDialog();
        rtnValue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_16.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles < intMixCycleMax)
      {
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_11.InitCustomDialog("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");
          customDialog_11.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_11.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_11.ShowCustomDialog();
          rtnValue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_11.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_12.InitCustomDialog("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");
        customDialog_12.SetCustomDialogProperty( "numeric1.Maximum", intMixCycleMax );
        customDialog_12.ShowCustomDialog();
        rtnValue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_12.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      if (fltAspMixVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_13.InitCustomDialog("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");
        customDialog_13.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_13.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_13.ShowCustomDialog();
        rtnValue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
        fltAspMixVolume = customDialog_13.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volumes successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
      rtnValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_10.InitCustomDialog("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");
      customDialog_10.ShowCustomDialog();
      rtnValue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
    intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (intTipType != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (blnTipEject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
    }
    if(0){
      if (blnIsTwoPlate == 1)
      {
        DATA_SequenceIncrement(blnIsTwoPlate, seqDestination);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
  }

  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & seqToIncrement ) void {
    private variable intTotalPositions;
    private variable intExpectedPositions;
    private variable intCurrentPosition;
    private variable strSeqName;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
    intExpectedPositions = 192;
    intTotalPositions = SeqGetTotal(seqToIncrement);
    if (intTotalPositions == intExpectedPositions)
    {
      intCurrentPosition = seqToIncrement.GetCurrentPosition();
      if (intCurrentPosition == 1)
      {
        seqToIncrement.SetCurrentPosition(97);
      }
      if (intCurrentPosition == 97)
      {
        SeqResetSequenceIndexes(seqToIncrement);
        if(0){
          seqToIncrement.SetCurrentPosition(1);
        }
      }
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqToIncrement);
    }
    else
    {
      strSeqName = SeqGetName(seqToIncrement);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("===== The following sequence: '"), strSeqName, Translate("' does not require incrementation. "), Translate("\n The sequence has not been altered by the sub-method."));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
  }
} // library namespace
