 namespace _Method { #include "SangerCleanup\\Library\\SangerCleanup_Processes.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.res"
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
global device ML_STAR ("SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.lay", "ML_STAR", hslTrue);
variable blnIsTwoPlate;
variable blnSimulationMode;
timer tmrHHS;
variable rtnTimerStopped;
timer tmrBindTwo;
timer tmrBindOne;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    SANGERCLEANUP_PROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************************************************************************************************************************************************\n                                                            Method Details\n******************************************************************************************************************************************************\nMethod:          Sanger Bead Cleanup Template\nVersion:         0.1 (pre-launch)\nDescription:     TBD\nSoftware:        Venus 4 (v 4.5.0.7977)\nAuthor(s):          Tobi Ajenifuja, Chris Henderson, Kira Nelms\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    SANGERCLEANUP_PROCESSES::SYSTEM_Init(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.NTRTips, ML_STAR.NTREmptyStack, ML_STAR.SourcePlates, ML_STAR.BindPlates, ML_STAR.DestinationPlates, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResBeads, ML_STAR.ResElution, ML_STAR.ResEthanol, ML_STAR.Waste, ML_STAR.HHS, blnSimulationMode, blnIsTwoPlate);
    SANGERCLEANUP_PROCESSES::HHS_Heat(38);
    SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0, blnIsTwoPlate);
    SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1, blnIsTwoPlate);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindOne, 180);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
    SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
    if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
    {
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.SourcePlates);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0, blnIsTwoPlate);
      SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1, blnIsTwoPlate);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindTwo, 180);
    }
    SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrBindOne, rtnTimerStopped);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
    SANGERCLEANUP_PROCESSES::_ExitLibrary();
  } }
